CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:7|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
    Select a color scheme:RGB
    Select the image to be colored red:CellImage
    Select the image to be colored green:CellImage
    Select the image to be colored blue:CellImage
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_binary_labels
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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