CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your analysis.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:["The Metadata module (optional) allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be extracted from the image's file name and/or location, or from an external file."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata file location:C:\\\\Users\\\\karhohs\\\\Documents\\\\GitHub\\\\tutorials\\\\translocation\\\\Translocation_doses_and_controls.csv
    Match file and image metadata:[{'Image Metadata': u'Well', 'CSV Metadata': u'Well'}]
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:rawDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:rawGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module (optional) allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, separate time-lapse movies, 3D stacks, etc.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['IdentifyPrimaryObjects takes an input image and identifies biological objects of interest, for example nuclei from a DNA-stained image, or colonies on an agar plate.']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
    Select the input image:rawDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:6|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notes:["IdentifySecondaryObjects takes previously-identified primary objects and identifies a new set of objects based on them (e.g., cell edges are often the secondary objects that are identified based on nuclei as primary objects). The new objects are called secondary objects because they depend on primary objects for their identity. The extent of secondary objects can be determined as a fixed distance from the edge of primary objects, or based on an input image  where the secondary objects' edges are visible (e.g. a whole cell stain reveals cell edges)."]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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:rawGFP
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['IdentifyTertiaryObjects subtracts the regions associated with one set of objects (e.g. nuclei) from regions associated with a set of objects that contains them (e.g. cells, thus producing cytoplasm regions as tertiary objects). ']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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notes:['MeasureObjectIntensity will measure multiple intensity-related metrics for whichever objects and channels you specify.']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
    Hidden:1
    Select an image to measure:rawGFP
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureCorrelation:[module_num:9|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notes:['MeasureCorrelation will measure correlation metrics for whichever objects and channels you specify.']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
    Hidden:2
    Hidden:2
    Select an image to measure:rawGFP
    Select an image to measure:rawDNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cytoplasm
    Select an object to measure:Nuclei

CalculateMath:[module_num:10|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notes:['CalculateMath allows you to carry out mathematical operations on measurements made earlier in the pipeline.']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
    Name the output measurement:IntensityRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_rawGFP
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_rawGFP
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
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    Select the image to be colored green:rawGFP
    Select the image to be colored blue:rawDNA
    Name the output image:GFPandDNA
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPandDNA
    Name the output image:CellAndNucleiOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CellAndNucleiOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:rawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:14|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notes:['ExportToDatabase exports data directly to a database, or in database readable format, including an imported file with column names and a CellProfiler Analyst properties file, if desired. ']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:rawDNA,rawGFP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:Yes
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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